CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20130830204909
ModuleCount:13
HasImagePlaneDetails:True

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images based on matching rules?:Yes
    Select the rule criteria:and (extension does isimage) (directory doesnot startwith ".")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:[\\\\\\\\/](?P<Dataset>[0-9])[\\\\\\\\/]Ch1$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
    :[]
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    Set intensity range from:Image metadata
    Assignments count:1
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Dataset

Crop:[module_num:5|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
    Select the input image:DNA
    Name the output image:Cropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:825,1000
    Top and bottom rectangle positions:50,325
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    Remove empty rows and columns?:All
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Cropped
    Name the primary objects to be identified:AllObjects
    Typical diameter of objects, in pixel units (Min,Max):5,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:1
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:2
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ReassignObjectNumbers:[module_num:7|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
    Select the input objects:AllObjects
    Name the new objects:Nuclei
    Operation:Unify
    Maximum distance within which to unify objects:0
    Unify using a grayscale image?:Yes
    Select the grayscale image to guide unification:Cropped
    Minimum intensity fraction:0.95
    Method to find object intensity:Centroids
    Retain outlines of the relabeled objects?:Yes
    Name the outlines:NucleiOutlines
    Unification method:Distance
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
TrackObjects:[module_num:8|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
    Choose a tracking method:LAP
    Select the objects to track:Nuclei
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    Select display option:Color and Number
    Save color-coded image?:No
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    Select the motion model:Both
    Number of standard deviations for search radius:3
    Search radius limit, in pixel units (Min,Max):2.000000,10.000000
    Run the second phase of the LAP algorithm?:Yes
    Gap cost:40
    Split alternative cost:40
    Merge alternative cost:40
    Maximum gap displacement:50
    Maximum split score:50
    Maximum merge score:50
    Maximum gap:1
    Filter objects by lifetime?:No
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Cropped
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:NucleiOutlines
    Select outline color:Yellow

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|C:\\\\\\\\Trunk\\\\\\\\Testing\\\\\\\\CellProfiler-Analyst\\\\\\\\data\\\\\\\\outlines\\\\\\\\\\\\g<Dataset>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:Cropped
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|C:\\\\\\\\Trunk\\\\\\\\Testing\\\\\\\\CellProfiler-Analyst\\\\\\\\data\\\\\\\\cropped\\\\\\\\\\\\g<Dataset>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|C:\\\\\\\\Trunk\\\\\\\\Testing\\\\\\\\CellProfiler-Analyst\\\\\\\\data\\\\\\\\overlay\\\\\\\\\\\\g<Dataset>
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:13|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|C:\\\\\\\\Trunk\\\\\\\\Testing\\\\\\\\CellProfiler-Analyst\\\\\\\\data
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Example.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:No
    Properties image group count:2
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:Experiment
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Select an image to include:Cropped
    Use the image name for the display?:No
    Image name:DNA
    Channel color:gray
    Select an image to include:NucleiOutlines
    Use the image name for the display?:No
    Image name:Nuclei
    Channel color:yellow
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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